PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Flanker PSYC4007
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent target_display
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimulus
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  Routine instructions
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    TextComponent First_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Respond to the DIRECTION of the central arrow

        if you see…
        BLUE: Press the key matching the direction
        ORANGE: Press the OPPOSITE key

        Press SPACE to begin
    KeyboardComponent First_instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_intro
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  Routine probe
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Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = $"blocks_"+expInfo['group']+".xlsx"
    loopType = random
    nReps = 1
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    Routine block_intro
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = 4007/conditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [{'stimulus': ':---', 'color': ':---', 'target_dir': ':---', 'corrAns': ':---', 'congruency': ':---'},
        {'stimulus': '<<<<<', 'color': 'blue', 'target_dir': 'left', 'corrAns': 'left', 'congruency': 'congruent'},
        {'stimulus': '>>>>>', 'color': 'blue', 'target_dir': 'right', 'corrAns': 'right', 'congruency': 'congruent'},
        {'stimulus': '<<<<<', 'color': 'orange', 'target_dir': 'left', 'corrAns': 'right', 'congruency': 'congruent'},
        {'stimulus': '>>>>>', 'color': 'orange', 'target_dir': 'right', 'corrAns': 'left', 'congruency': 'congruent'},
        {'stimulus': '<<><<', 'color': 'blue', 'target_dir': 'right', 'corrAns': 'right', 'congruency': 'incongruent'},
        {'stimulus': '>><>>', 'color': 'blue', 'target_dir': 'left', 'corrAns': 'left', 'congruency': 'incongruent'},
        {'stimulus': '<<><<', 'color': 'orange', 'target_dir': 'right', 'corrAns': 'left', 'congruency': 'incongruent'},
        {'stimulus': '>><>>', 'color': 'orange', 'target_dir': 'left', 'corrAns': 'right', 'congruency': 'incongruent'}]
      Routine trial
    LoopTerminator trials
  LoopTerminator block
  Routine probe
